PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data file delimiter = tab
  Data filename = "data/sub-{sub}_task-balloonanalogrisktask_run-{run}_beh".format(sub = expInfo['participant'], run = expInfo['session'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1200]
  color = $[1,1,1]
  expName = BART_exp
  keyboardBackend = ioHub
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Routines
  Routine Feedback
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    TextComponent text_feedback
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback
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  Routine Instructions
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    CodeComponent update_text_instructions
      Code Type = Auto->JS
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      Begin Experiment:
        text_right = ""
        text_center = ""
        balloon_value_text = ""
        bank_value_text = ""
        text_instructions = 0
      Begin Routine:
        n_pumps = 0;
      Each Frame:
        if text_instructions == 0:
            text_center = "Wir starten nun mit dem ersten Verhaltensexperiment! \n \n Ziel dieses Experiments ist es, möglichst viel Geld zu sammeln. Wir erklären Ihnen im Folgenden wie das Experiment funktioniert."
        elif text_instructions == 1:
            marker_balloon_value.draw()
            balloon_value_text = "Momentanes Guthaben:\n0.05 CHF"
            text_center = ""
            text_right = "Sie sehen hier einen roten Ballon. Sie können den Ballon aufpumpen, indem Sie mit der linken Maustaste (Zeigefinger) auf den Ballon klicken. Mit jedem Klick erhalten Sie zudem 5 Rappen. Ihr gesammeltes temporäres Guthaben sehen Sie im unteren Bildschirmbereich."
            stim_balloon_instructions.setSize([[0.1, 0.3]])
            text_balloon_value_instructions.draw()
            stim_balloon_instructions.draw()
        elif text_instructions == 2:
            balloon_value_text = "Momentanes Guthaben:\n3.20 CHF"
            text_right = "Aber Achtung: Wenn Sie zu viel Luft in den Ballon pumpen, platzt der Ballon und Sie verlieren das gesamte temporäre Guthaben."
            text_balloon_value_instructions.draw()
            stim_balloon_burst_instructions.draw()
            back_instructions.draw()
        elif text_instructions == 3:
            text_right = "Damit Sie das gesammelte Geld nicht verlieren, können Sie die rechte Maustaste (Mittelfinger) drücken, bevor der Ballon platzt. Das gesammelte Geld wird dann auf Ihre Bank überwiesen und ist sicher. Ihr gesichertes Guthaben sehen Sie im oberen Bereich des Bildschirms."
            balloon_value_text = "Momentanes Guthaben:\n1.45 CHF"
            bank_value_text = "Auf der Bank:\n0.00 CHF"
            stim_balloon_instructions.setSize([[0.1 + 29*0.006, 0.3 + 29*0.020]])
            text_balloon_value_instructions.draw()
            text_bank_value_instructions.draw()
            marker_bank_value.draw()
            stim_balloon_instructions.draw()
            back_instructions.draw()
        elif text_instructions == 4:
            text_center = ""
            text_right = "Nachdem Sie entweder das Geld eingesammelt haben oder der Ballon geplatzt ist, endet der Durchlauf und Ihnen wird ein neuer Ballon präsentiert."
            balloon_value_text = "Momentates Guthaben:\n0.00 CHF"
            bank_value_text = "Auf der Bank:\n1.45 CHF"
            stim_balloon_instructions.setSize([[0.1, 0.3]])
            text_balloon_value_instructions.draw()
            text_bank_value_instructions.draw()
            stim_balloon_instructions.draw()
            back_instructions.draw()
        elif text_instructions == 5:
            bank_value_text = ""
            balloon_value_text = ""
            text_right = ""
            text_center = "Bitte stellen Sie sicher, dass Sie die Instruktionen verstanden haben. \n \n Sollten Sie die Instruktionen noch nicht vollständig verstanden haben, können Sie mittels dem «Züruck»-Button zurückblättern. Drücken Sie auf «Weiter, wenn Sie alles verstanden haben."
            back_instructions.draw()
        else:
            continueRoutine = False
    TextComponent text_instructions_center
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = norm
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      text [set every frame]:
        $text_center
    TextComponent text_right_instruction
      color = black
      letterHeight = 0.08
      pos = (0.60, 0)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 0.65
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      text [set every frame]:
        $text_right
    MouseComponent mouse_instructions
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent continue_instructions
      anchor = bottom-right
      bold = True
      borderColor = black
      borderWidth = 3
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.9, -0.9)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      text = Weiter
      units = norm
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    TextboxComponent back_instructions
      anchor = bottom-right
      bold = True
      borderColor = black
      borderWidth = 3
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.7, -0.9)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = Zurück
      units = norm
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    CodeComponent update_back_continue
      Code Type = Auto->JS
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      Begin Routine:
        mouseIsDown = True
      Each Frame:
        if mouse_instructions.getPressed()[0] == 1 and mouseIsDown == False:
            mouseIsDown = True
            mouseDownContinue = False
            mouseDownBack = False
            if continue_instructions.contains(mouse_instructions):
                mouseDownContinue = True
            elif back_instructions.contains(mouse_instructions):
                    mouseDownBack = True

        # Check if the mouse is released
        if mouse.getPressed()[0] == 0 and mouseIsDown:
            mouseIsDown = False
            if continue_instructions.contains(mouse_instructions) and mouseDownContinue == True:
                mouseClickedOnContinue = True
                text_instructions = text_instructions + 1
            elif back_instructions.contains(mouse_instructions) and mouseDownBack == True:
                if text_instructions >= 2:
                    mouseClickedOnBack = True
                    text_instructions = text_instructions - 1
    ImageComponent stim_balloon_instructions
      image = images/balloon.png
      interpolate = nearest
      pos = (0, -0.1)
      size [set every frame] = [0.1 + n_pumps*0.006, 0.3 + n_pumps*0.020]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      texture resolution = 256
      units = norm
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    ImageComponent stim_balloon_burst_instructions
      image = images/balloon_burst.png
      pos = (0, -0.1)
      size [set every frame] = [0.3, 0.9]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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    TextboxComponent text_balloon_value_instructions
      alignment = top-left
      bold = False
      color = black
      editable = False
      font = Sans Open
      letterHeight = 0.08
      pos = (-0.5, -0.90)
      size = (0.7,0.5)
      startVal [time (s)] = 0.0
      text [set every frame] = $balloon_value_text
      units = norm
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    TextboxComponent text_bank_value_instructions
      alignment = top-left
      bold = False
      color = black
      editable = False
      font = Sans Open
      letterHeight = 0.08
      pos = (-0.5, 0.65)
      size = (0.7,0.5)
      startVal [time (s)] = 0.0
      text [set every frame] = $bank_value_text
      units = norm
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    PolygonComponent marker_balloon_value
      fillColor = 0.7255, -0.8431, -0.5294
      lineColor = black
      ori = 180
      pos = (-0.58, -0.5)
      shape = arrow
      size = (0.1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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    PolygonComponent marker_bank_value
      fillColor = 0.7255, -0.8431, -0.5294
      lineColor = black
      pos = (-0.75, 0.55)
      shape = arrow
      size = (0.1, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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  Routine Start
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    TextComponent text_start
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = norm
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      text:
        $"Ihnen werden nun in 3 Blöcken jeweils 30 Ballone präsentiert. Bitte versuchen Sie, möglichst viel Geld zu sammeln. Zwischen den Blöcken wird es jeweils eine Pause von 5 Minuten geben. \n \n" + "Block " + str(int(expInfo['session'])) + " beginnt, sobald Sie auf \"Start\" drücken."
    TextboxComponent continue_start
      anchor = bottom-right
      bold = True
      borderColor = black
      borderWidth = 3
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.9, -0.9)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      text = Start
      units = norm
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    MouseComponent mouse_start
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_start
      Code Type = Auto->JS
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      Begin Routine:
        mouseIsDown = False
      Each Frame:
        if mouse_start.getPressed()[0] == 1 and mouseIsDown == False:
            mouseIsDown = True
            mouseDownContinue = False
            if continue_start.contains(mouse_start):
                mouseDownContinue = True

        if mouse.getPressed()[0] == 0 and mouseIsDown:
            mouseIsDown = False
            if continue_start.contains(mouse_start) and mouseDownContinue == True:
                mouseClickedOnContinue = True
                continueRoutine=False
  Routine End
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    TextComponent text_end
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = Sie sind am Ende dieses Blocks angelangt. Melden Sie sich bitte beim Versuchsleiter.
      units = norm
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    KeyboardComponent key_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome
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    TextComponent text_welcome
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Herzlich Willkommen zum ersten Verhaltensexperiment!

        Wir möchten Sie zuerst bitten, ein paar demografische Angaben zu machen. Bitte klicken Sie dafür auf "Weiter".
    MouseComponent mouse_welcome
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent continue_welcome
      anchor = bottom-right
      bold = True
      borderColor = black
      borderWidth = 3
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.9, -0.9)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      text = Weiter
      units = norm
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    CodeComponent code_continue_welcome
      Code Type = Auto->JS
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      Begin Routine:
        mouseIsDown = False
      Each Frame:
        if mouse_welcome.getPressed()[0] == 1 and mouseIsDown == False:
            mouseIsDown = True
            mouseDownContinue = False
            if continue_welcome.contains(mouse_welcome):
                mouseDownContinue = True

        if mouse.getPressed()[0] == 0 and mouseIsDown:
            mouseIsDown = False
            if continue_welcome.contains(mouse_welcome) and mouseDownContinue == True:
                mouseClickedOnContinue = True
                continueRoutine = False
  Routine Demographics
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    TextComponent text_demographics
      color = black
      letterHeight = 0.08
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = Bitte machen Sie folgende Angaben und drücken Sie auf "Weiter".
      units = norm
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    MouseComponent mouse_demographics
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextboxComponent text_age_demographics
      bold = False
      color = black
      editable = False
      letterHeight = 0.06
      pos = (0, 0.2)
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      text = Bitte geben Sie Ihr Alter ein: 
      units = norm
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    TextboxComponent text_age_input
      bold = False
      borderColor = black
      color = black
      editable = True
      letterHeight = 0.08
      pos = (0.30, 0.2)
      size = (0.09, 0.09)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent text_gender_demographics
      bold = False
      color = black
      editable = False
      letterHeight = 0.06
      pos = (0, -0.2)
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      text = Bitte geben Sie Ihr Geschlecht an: 
      units = norm
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    SliderComponent slider_gender
      borderColor = black
      color = Black
      fillColor = white
      forceEndRoutine = False
      granularity = 0
      labels = ("Weiblich", "Männlich", "Divers", "Keine Angabe")
      letterHeight = 0.06
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4)
      units = norm
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    TextboxComponent continue_demographics
      anchor = bottom-right
      bold = True
      borderColor = black
      borderWidth = 3
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.9, -0.9)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      text = Weiter
      units = norm
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    CodeComponent code_continue_demographics
      Code Type = Auto->JS
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      Begin Routine:
        mouseIsDown = False
      Each Frame:
        if mouse_demographics.getPressed()[0] == 1 and mouseIsDown == False:
            mouseIsDown = True
            mouseDownContinue = False
            if continue_demographics.contains(mouse_demographics):
                mouseDownContinue = True

        if mouse.getPressed()[0] == 0 and mouseIsDown:
            mouseIsDown = False
            if continue_demographics.contains(mouse_demographics) and mouseDownContinue == True:
                mouseClickedOnContinue = True
                continueRoutine = False
  Routine trials
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    CodeComponent balloon_parameters
      Code Type = Auto->JS
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      Begin Routine:
        n_pumps = 0;
        popped = False;
      End Routine:
        pump_loop.addData('n_pumps', n_pumps)
        pump_loop.addData('earnings', balloon_value)
        pump_loop.addData('popped', popped)
    CodeComponent reward
      Code Type = Py
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      Begin Experiment:
        bank_value = '{:.2f}'.format(0.00);
      Begin Routine:
        balloon_value = 0.00;
      Each Frame:
        balloon_value = '{:.2f}'.format(n_pumps * 0.05);
      End Routine:
        if popped == True:
            feedback = f'Ups. Der Ballon ist geplatzt.'
        else:
            feedback = f'Sie haben {balloon_value} CHF auf die Bank übertragen.'
            bank_value = '{:.2f}'.format(float(bank_value) + float(balloon_value))
    ImageComponent stim_balloon
      image = images/balloon.png
      interpolate = nearest
      pos = (0, -0.1)
      size [set every frame] = [0.1 + n_pumps*0.006, 0.3 + n_pumps*0.020]
      startVal [time (s)] = 0.0
      texture resolution = 256
      units = norm
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    ImageComponent stim_balloon_burst
      image = images/balloon_burst.png
      pos = (0, -0.1)
      size [set every frame] = [0.3, 0.9]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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    TextboxComponent text_ballon_value
      alignment = top-left
      bold = False
      color = black
      editable = False
      font = Sans Open
      letterHeight = 0.08
      pos = (-0.6, -0.90)
      size = (0.7,0.5)
      startVal [time (s)] = 0.0
      text [set every frame] = $"Momentaner Ballonwert:\n" + str(balloon_value) + " CHF"
      units = norm
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    TextboxComponent text_bank
      alignment = top-left
      bold = False
      color = black
      editable = False
      font = Sans Open
      letterHeight = 0.08
      pos = (-0.6, 0.65)
      size = (0.7,0.5)
      startVal [time (s)] = 0.0
      text [set every frame] = $"Auf der Bank:\n" + str(bank_value) + " CHF"
      units = norm
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent collect
      Code Type = Auto->JS
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      Each Frame:
        if mouse.getPressed()[2]:
            continueRoutine=False
    CodeComponent pumping
      Code Type = Py
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      Before Experiment:
        import random
        from psychopy import sound
      Begin Routine:
        mouseIsDown = False
      Each Frame:
        if mouse.getPressed()[0] == 1 and mouseIsDown == False:
            mouseIsDown = True
            mouseDownButton = False
            if button_balloon.contains(mouse):
                mouseDownButton = True

        # Check if the mouse is released
        if mouse.getPressed()[0] == 0 and mouseIsDown:
            mouseIsDown = False
            if button_balloon.contains(mouse) and mouseDownButton == True:
                mouseClickedOnBUtton = True
                n_pumps = n_pumps + 1;

                if n_pumps > max_pumps:
                    stim_balloon_burst.draw()
                    sound_bang.play()
                    continueRoutine=False
                    popped = True
    SoundComponent sound_bang
      sound = sounds/bang.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      stopWithRoutine = False
      syncScreenRefresh = False
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    ButtonComponent button_balloon
      bold = True
      borderColor = black
      color = black
      fillColor = 0.7255, -0.8431, -0.5294
      forceEndRoutine = False
      letterHeight = 0.055
      oncePerClick = False
      pos = (0, -0.78)
      size = (0.4, 0.15)
      startVal [time (s)] = 0
      text = Ballon aufpumpen
      units = norm
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Flow
  Routine Start
  LoopInitiator pump_loop loopType="TrialHandler"
    conditionsFile = balloon.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image': 'balloon.png', 'max_pumps': 0},
      {'image': 'balloon.png', 'max_pumps': 4.37931034482759},
      {'image': 'balloon.png', 'max_pumps': 8.75862068965517},
      {'image': 'balloon.png', 'max_pumps': 13.1379310344828},
      {'image': 'balloon.png', 'max_pumps': 17.5172413793103},
      {'image': 'balloon.png', 'max_pumps': 21.8965517241379},
      {'image': 'balloon.png', 'max_pumps': 26.2758620689655},
      {'image': 'balloon.png', 'max_pumps': 30.6551724137931},
      {'image': 'balloon.png', 'max_pumps': 35.0344827586207},
      {'image': 'balloon.png', 'max_pumps': 39.4137931034483},
      {'image': 'balloon.png', 'max_pumps': 43.7931034482759},
      {'image': 'balloon.png', 'max_pumps': 48.1724137931034},
      {'image': 'balloon.png', 'max_pumps': 52.551724137931},
      {'image': 'balloon.png', 'max_pumps': 56.9310344827586},
      {'image': 'balloon.png', 'max_pumps': 61.3103448275862},
      {'image': 'balloon.png', 'max_pumps': 65.6896551724138},
      {'image': 'balloon.png', 'max_pumps': 70.0689655172414},
      {'image': 'balloon.png', 'max_pumps': 74.448275862069},
      {'image': 'balloon.png', 'max_pumps': 78.8275862068966},
      {'image': 'balloon.png', 'max_pumps': 83.2068965517241},
      {'image': 'balloon.png', 'max_pumps': 87.5862068965517},
      {'image': 'balloon.png', 'max_pumps': 91.9655172413793},
      {'image': 'balloon.png', 'max_pumps': 96.3448275862069},
      {'image': 'balloon.png', 'max_pumps': 100.724137931034},
      {'image': 'balloon.png', 'max_pumps': 105.103448275862},
      {'image': 'balloon.png', 'max_pumps': 109.48275862069},
      {'image': 'balloon.png', 'max_pumps': 113.862068965517}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
    Routine trials
    Routine Feedback
  LoopTerminator pump_loop
  Routine End
