PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data filename = "data/sub-{sub}_task-gameofdicetask_beh".format(sub = expInfo['participant'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1200]
  color = $[1,1,1]
  expName = GDT_trials
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextboxComponent box_dice
      bold = False
      borderColor = black
      borderWidth = 3
      color = None
      editable = False
      letterHeight = 0.05
      pos = (-0.7, 0.55)
      size = (0.4, 0.6)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent img_dice_throw_trials
      image [set every repeat] = $f"images/{diceImage}"
      pos = (-0.7, 0.53)
      size = (0.30, 0.45)
      startVal [condition] = $thrown
      stopVal [duration (s)] = 1.5
      texture resolution = 512
      units = norm
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    TextboxComponent text_dice_header
      bold = True
      color = black
      editable = False
      letterHeight = 0.08
      pos = (-0.3, 0.1)
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      text = Mögliche Kombinationen
      units = norm
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    TextboxComponent text_gain
      bold = False
      color = black
      editable = False
      letterHeight = 0.08
      pos = (-0.13, 0.7)
      size = (1, 0.5)
      startVal [time (s)] = 0
      text [set every frame] = Gewinn / Verlust: 
      units = norm
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    TextboxComponent value_gain
      bold = False
      color = black
      editable = False
      letterHeight = 0.08
      pos = (0.3, 0.7)
      size = (1, 0.5)
      startVal [time (s)] = 0
      units = norm
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      text [set every frame]:
        $msg
    TextboxComponent text_bank
      bold = False
      color = black
      editable = False
      letterHeight = 0.1
      pos = (-0.17, 0.55)
      size = (1, 0.5)
      startVal [time (s)] = 0
      text [set every frame] = Guthaben:  
      units = norm
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    TextboxComponent value_bank
      bold = False
      color = black
      editable = False
      letterHeight = 0.1
      pos = (0.3, 0.55)
      size = (1, 0.5)
      startVal [time (s)] = 0
      text [set every repeat] = $str(bank) + " Franken"
      units = norm
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    ImageComponent img_dice_1
      image = images/dice_1.png
      pos = (-0.8, -0.1)
      size = (0.10, 0.15)
      startVal [time (s)] = 0.0
      texture resolution = 64
      units = norm
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    ImageComponent img_dice_2
      image = images/dice_2.png
      pos = (-0.60, -0.1)
      size = (0.10, 0.15)
      startVal [time (s)] = 0.0
      texture resolution = 64
      units = norm
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    ImageComponent img_dice_3
      image = images/dice_3.png
      pos = (-0.4, -0.1)
      size = (0.10, 0.15)
      startVal [time (s)] = 0.0
      texture resolution = 64
      units = norm
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    ImageComponent img_dice_4
      image = images/dice_4.png
      pos = (-0.2, -0.1)
      size = (0.10, 0.15)
      startVal [time (s)] = 0.0
      texture resolution = 64
      units = norm
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    ImageComponent img_dice_5
      image = images/dice_5.png
      pos = (0.0, -0.1)
      size = (0.10, 0.15)
      startVal [time (s)] = 0.0
      texture resolution = 64
      units = norm
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    ImageComponent img_dice_6
      image = images/dice_6.png
      pos = (0.2, -0.1)
      size = (0.10, 0.15)
      startVal [time (s)] = 0.0
      texture resolution = 64
      units = norm
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    ImageComponent img_dice_1_2
      image = images/dice_12.png
      pos = (-0.7, -0.30)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      texture resolution = 64
      units = norm
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    ImageComponent img_dice_3_4
      image = images/dice_34.png
      pos = (-0.3, -0.30)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      texture resolution = 64
      units = norm
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    ImageComponent img_dice_5_6
      image = images/dice_56.png
      pos = (0.1, -0.30)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      texture resolution = 64
      units = norm
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    ImageComponent img_dice_1_2_3
      image = images/dice_123.png
      pos = (-0.5, -0.5)
      size = (0.20, 0.15)
      startVal [time (s)] = 0.0
      texture resolution = 64
      units = norm
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    ImageComponent img_dice_4_5_6
      image = images/dice_456.png
      pos = (-0.1, -0.5)
      size = (0.2, 0.15)
      startVal [time (s)] = 0.0
      texture resolution = 64
      units = norm
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    ImageComponent img_dice_1_2_3_4
      image = images/dice_1234.png
      pos = (-0.7, -0.7)
      size = (0.25, 0.15)
      startVal [time (s)] = 0.0
      texture resolution = 64
      units = norm
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    ImageComponent img_dice_2_3_4_5
      image = images/dice_2345.png
      pos = (-0.3, -0.7)
      size = (0.25, 0.15)
      startVal [time (s)] = 0.0
      texture resolution = 64
      units = norm
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    ImageComponent img_dice_3_4_5_6
      image = images/dice_3456.png
      pos = (0.1, -0.7)
      size = (0.25, 0.15)
      startVal [time (s)] = 0.0
      texture resolution = 64
      units = norm
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    TextboxComponent text_value_header
      bold = True
      color = black
      editable = False
      letterHeight = 0.08
      pos = (0.6, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Gewinn / Verlust
      units = norm
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    TextboxComponent text_value_1000
      bold = False
      color = black
      editable = False
      letterHeight = 0.08
      pos = (0.6, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = 1000 CHF
      units = norm
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    TextboxComponent text_value_500
      bold = False
      color = black
      editable = False
      letterHeight = 0.08
      pos = (0.6, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text =  500 CHF
      units = norm
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    TextboxComponent text_value_200
      bold = False
      color = black
      editable = False
      letterHeight = 0.08
      pos = (0.6, -0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text =  200 CHF
      units = norm
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    TextboxComponent text_value_100
      bold = False
      color = black
      editable = False
      letterHeight = 0.08
      pos = (0.6, -0.7)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text =  100 CHF
      units = norm
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    MouseComponent mouse_task
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent update_choice
      Code Type = Auto->JS
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      Before Experiment:
        import re
      Begin Routine:
        dice = [img_dice_1, img_dice_2, img_dice_3,
                img_dice_4, img_dice_5, img_dice_6,
                img_dice_1_2, img_dice_3_4, img_dice_5_6,
                img_dice_1_2_3, img_dice_4_5_6,
                img_dice_1_2_3_4, img_dice_2_3_4_5,
                img_dice_3_4_5_6]

        mouseIsDown = False
        selected = False
      Each Frame:
        if mouse_task.getPressed()[0] == 1 and mouseIsDown == False:
            mouseIsDown = True
            mouseDownDiceIndex = -1
            for i, die in enumerate(dice):
                if die.contains(mouse_task):
                    mouseDownDiceIndex = i

        if mouse_task.getPressed()[0] == 0 and mouseIsDown:
            mouseIsDown = False
            for i, die in enumerate(dice):
                if die.contains(mouse_task) and i == mouseDownDiceIndex:
                    mouseClickedOnDice = True
                    selected = True
                    for j, comb in enumerate(dice):
                        comb.contrast = 1
                        die.contrast = 0.5
                        choice = re.findall(r'\d+', str(die.name))
    CodeComponent throw_dice
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy import sound
      Begin Experiment:
        bank = 1000
      Begin Routine:
        thrown = False;
        choice = ""
        msg = "0 Franken"
      Each Frame:
        if mouse_task.getPressed()[2] == 1 and selected == True:
            thrown = True;
            selected == False;

            choice = list(map(int, choice))
            if thrown == True and d_number in choice:
                if len(choice) == 4:
                    msg = "+100 Franken"
                    gain = 100
                elif len(choice) == 3:
                    msg = "+200 Franken"
                    gain = 200
                elif len(choice) == 2:
                    msg = "+500 Franken"
                    gain = 500
                elif len(choice) == 1:
                    msg = "+1000 Franken"
                    gain = 1000
            else:
                if len(choice) == 4:
                    msg = "-100 Franken"
                    gain = -100
                elif len(choice) == 3:
                    msg = "-200 Franken"
                    gain = -200
                elif len(choice) == 2:
                    msg = " -500 Franken"
                    gain = -500
                elif len(choice) == 1:
                    msg = "-1000 Franken"
                    gain = -1000
      End Routine:
        bank = bank + gain;
    CodeComponent finish_routine
      Code Type = Auto->JS
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      Each Frame:
        if thrown == True:

            for j, comb in enumerate(dice):
                comb.contrast = 1

            if img_dice_throw_trials.status == FINISHED:
                continueRoutine = False
      End Routine:
        dice_loop.addData('choice', len(choice))
        dice_loop.addData('gain', gain)
    SoundComponent gain_sound
      sound [set every repeat] = sounds/win.wav
      startVal [condition] = $thrown and gain > 0
      stopVal [duration (s)] = 1.5
      stopWithRoutine = False
      syncScreenRefresh = False
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    SoundComponent loss_sound
      sound [set every repeat] = sounds/loss.wav
      startVal [condition] = $thrown and gain < 100
      stopVal [duration (s)] = 1.5
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine End
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    TextComponent text_end
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = Sie sind am Ende dieses Blocks angelangt. Melden Sie sich bitte beim Versuchsleiter.
      units = norm
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    KeyboardComponent key_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Start
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    TextComponent text_start
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Sie werden nun die Möglichkeit haben, einige Male zu würfeln, damit Sie sich an das Experiment gewöhnen können.
    TextboxComponent continue_start
      anchor = bottom-right
      bold = True
      borderColor = black
      borderWidth = 3
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.9, -0.97)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      text = Start
      units = norm
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    MouseComponent mouse_start
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_start
      Code Type = Auto->JS
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      Begin Routine:
        mouseIsDown = False
      Each Frame:
        if mouse_start.getPressed()[0] == 1 and mouseIsDown == False:
            mouseIsDown = True
            mouseDownContinue = False
            if continue_start.contains(mouse_start):
                mouseDownContinue = True

        if mouse_start.getPressed()[0] == 0 and mouseIsDown:
            mouseIsDown = False
            if continue_start.contains(mouse_start) and mouseDownContinue == True:
                mouseClickedOnContinue = True
                continueRoutine=False
  Routine Welcome
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    TextComponent text_welcome
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Herzlich Willkommen zum zweiten Verhaltensexperiment!

        Auch in diesem Experiment ist es Ihr Ziel, möglichst viel Geld zu sammeln. Wir erklären Ihnen im Folgenden das Experiment.
    TextboxComponent continue_welcome
      anchor = bottom-right
      bold = True
      borderColor = black
      borderWidth = 3
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.9, -0.97)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      text = Weiter
      units = norm
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    MouseComponent mouse_welcome
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_continue_welcome
      Code Type = Auto->JS
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      Begin Routine:
        mouseIsDown = False
      Each Frame:
        if mouse_welcome.getPressed()[0] == 1 and mouseIsDown == False:
            mouseIsDown = True
            mouseDownContinue = False
            if continue_welcome.contains(mouse_welcome):
                mouseDownContinue = True

        if mouse_welcome.getPressed()[0] == 0 and mouseIsDown:
            mouseIsDown = False
            if continue_welcome.contains(mouse_welcome) and mouseDownContinue == True:
                mouseClickedOnContinue = True
                continueRoutine = False
  Routine Instructions
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    CodeComponent update_text_instructions
      Code Type = Auto->JS
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      Begin Experiment:
        text_right = ""
        text_bottom = ""
        text_center = ""
      Begin Routine:
        text_instructions = 0
      Each Frame:
        if text_instructions == 0:
            text_center = ""
            text_right = "Oben links sehen Sie einen Würfel. Mit diesem Würfel werden Sie in diesem Experiment mehrmals würfeln. Dieser Würfel enthält die Zahlen 1 bis 6. Die Wahrscheinlichkeit eine bestimmte Zahl zu würfeln, ist für alle Zahlen gleich."
            box_dice_instructions.draw()
            img_dice_throw_instructions.draw()
            img_dice_grid.draw()
        elif text_instructions == 1:
            text_center = ""
            text_right = "Unterhalb des Würfels sehen Sie verschiedene Würfelkombinationen. Vor jedem Würfelwurf dürfen Sie sich einer dieser Kombinationen aussuchen. Ist die gewürfelte Zahl Teil der Kombination, erhalten Sie denn Betrag rechts von der Würfelkombination. Ist die gewürfelte Zahl nicht in der Würfelkombination zu finden, verlieren Sie den Betrag auf der rechten Seite. Wenn Sie zum Beispiel eine Kombination mit 2 Würfeln auswählen, gewinnen oder verlieren Sie 500 Franken."
            box_dice_instructions.draw()
            img_dice_throw_instructions.draw()
            img_dice_grid.draw()
            back_instructions.draw()
        elif text_instructions == 2:
            text_center = ""
            text_bottom = ""
            text_right = "Sie können Sie sich eine Würfelkombination aussuchen, indem Sie diese mit der linken Maustaste anklicken. Nachdem Sie sich eine Würfelkombination ausgesucht haben, können Sie die rechte Maustaste drücken, um zu würfeln."
            box_dice_instructions.draw()
            img_dice_throw_instructions.draw()
            img_dice_grid.draw()
            back_instructions.draw()
        elif text_instructions == 3:
            text_right = ""
            text_bottom = "Sie starten dieses Spiel mit einem Guthaben von 1000.- Franken. Nach jedem Würfelwurf wird Ihnen der entsprechende Betrag gutgeschrieben oder abgezogen. Ihr momentanes Guthaben sehen Sie immer rechts vom Würfel. \n \n Oberhalb davon sehen Sie jeweils den Betrag, den Sie nach dem Würfeln gewonnen oder verloren haben."
            text_center = ""
            box_dice_instructions.draw()
            img_dice_throw_instructions.draw()
            back_instructions.draw()
            text_gain_instructions.draw()
            value_gain_instructions.draw()
            text_bank_instructions.draw()
            value_bank_instructions.draw()
        elif text_instructions == 4:
            text_bottom = ""
            text_right = ""
            text_center = "Bitte stellen Sie sicher, dass Sie die Instruktionen verstanden haben. \n \n Sollten Sie die Instruktionen noch nicht vollständig verstanden haben, können Sie mittels dem «Züruck»-Button zurückblättern. Drücken Sie auf «Weiter, wenn Sie alles verstanden haben."
            back_instructions.draw()
        else:
            continueRoutine = False
    TextboxComponent box_dice_instructions
      bold = False
      borderColor = black
      borderWidth = 3
      color = None
      editable = False
      letterHeight = 0.05
      pos = (-0.7, 0.55)
      size = (0.4, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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    ImageComponent img_dice_throw_instructions
      image = images/dice_1.png
      pos = (-0.7, 0.53)
      size = (0.30, 0.45)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
      texture resolution = 512
      units = norm
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    TextboxComponent text_gain_instructions
      bold = False
      color = black
      editable = False
      letterHeight = 0.08
      pos = (-0.10, 0.7)
      size = (1, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
      text = Gewinn / Verlust: 
      units = norm
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    TextboxComponent value_gain_instructions
      bold = False
      color = black
      editable = False
      letterHeight = 0.08
      pos = (0.3, 0.7)
      size = (1, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
      text = 0 Franken
      units = norm
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    TextboxComponent text_bank_instructions
      bold = False
      color = black
      editable = False
      letterHeight = 0.1
      pos = (-0.17, 0.55)
      size = (1, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
      text = Guthaben:
      units = norm
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    TextboxComponent value_bank_instructions
      bold = False
      color = black
      editable = False
      letterHeight = 0.1
      pos = (0.3, 0.55)
      size = (1, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
      text = 1000 Franken
      units = norm
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    TextComponent text_instructions_center
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = norm
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      text [set every frame]:
        $text_center
    TextComponent text_bottom_instructions
      color = black
      letterHeight = 0.07
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text [set every frame]:
        $text_bottom
    TextComponent text_right_instructions
      color = black
      letterHeight = 0.07
      pos = (0.2, 0.55)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.3
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      text [set every frame]:
        $text_right
    MouseComponent mouse_instructions
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent img_dice_grid
      image = images/dice_grid_white.PNG
      pos = (0, -0.4)
      size = (2, 1.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
      texture resolution = 64
      units = norm
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    CodeComponent update_back_continue
      Code Type = Auto->JS
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      Begin Routine:
        mouseIsDown = False
      Each Frame:
        if mouse_instructions.getPressed()[0] == 1 and mouseIsDown == False:
            mouseIsDown = True
            mouseDownContinue = False
            mouseDownBack = False
            if continue_instructions.contains(mouse_instructions):
                mouseDownContinue = True
            elif back_instructions.contains(mouse_instructions):
                    mouseDownBack = True

        # Check if the mouse is released
        if mouse_instructions.getPressed()[0] == 0 and mouseIsDown:
            mouseIsDown = False
            if continue_instructions.contains(mouse_instructions) and mouseDownContinue == True:
                mouseClickedOnContinue = True
                text_instructions = text_instructions + 1
            elif back_instructions.contains(mouse_instructions) and mouseDownBack == True:
                if text_instructions >= 1:
                    mouseClickedOnBack = True
                    text_instructions = text_instructions - 1
    TextboxComponent back_instructions
      anchor = bottom-right
      bold = True
      borderColor = black
      borderWidth = 3
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.7, -0.97)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = Zurück
      units = norm
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    TextboxComponent continue_instructions
      anchor = bottom-right
      bold = True
      borderColor = black
      borderWidth = 3
      color = black
      editable = False
      letterHeight = 0.05
      pos = (0.9, -0.97)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      text = Weiter
      units = norm
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Flow
  Routine Welcome
  Routine Instructions
  Routine Start
  LoopInitiator dice_loop loopType="TrialHandler"
    conditionsFile = dice_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'diceImage': 'dice_1.png', 'd_number': 1},
      {'diceImage': 'dice_2.png', 'd_number': 2},
      {'diceImage': 'dice_3.png', 'd_number': 3},
      {'diceImage': 'dice_4.png', 'd_number': 4},
      {'diceImage': 'dice_5.png', 'd_number': 5}]
    Routine trial
  LoopTerminator dice_loop
  Routine End
